PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = priming
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'plane'},
      {'study_word': 'family'},
      {'study_word': 'land'},
      {'study_word': 'water'},
      {'study_word': 'mate'},
      {'study_word': 'nail'},
      {'study_word': 'color'},
      {'study_word': 'flower'},
      {'study_word': 'gate'},
      {'study_word': 'slate'},
      {'study_word': 'fire'},
      {'study_word': 'orange'},
      {'study_word': 'brake'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': 'f_mi_y'},
      {'test': 'p_a_t'},
      {'test': 'l_n_'},
      {'test': 'ta_l_'},
      {'test': 'c_l_r'},
      {'test': 'fl_w_ _'},
      {'test': 'r_ _e_'},
      {'test': 'g_t_'},
      {'test': 'b_a_e'},
      {'test': 'd_s_'},
      {'test': 'f_r_'},
      {'test': 'ra_g_'},
      {'test': 'w_te_'},
      {'test': 'sl_t_'},
      {'test': 'p_an_'}]
    Routine test
  LoopTerminator trials_2
